config:
  title: Check Plate
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
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object_types:
  - {name: E coli Plate of Plasmid, description: A plate containing E. coli transformed with a plasmid, handler: sample_container, unit: Plasmid, release_method: return, prefix: 37C incubator, sample_type_name: Plasmid}
  - {name: Checked E coli Plate of Plasmid, description: It's a checked plate, handler: sample_container, unit: plate, release_method: return, prefix: M4AP, sample_type_name: Plasmid}
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operation_type: Check Plate
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Plate, sample_types: [Plasmid], object_types: [E coli Plate of Plasmid], routing: P}
  - {ftype: sample, role: output, name: Plate, sample_types: [Plasmid], object_types: [Checked E coli Plate of Plasmid], routing: P}
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documentation:
This is run the day after <b>E. coli Transformation</b> and is a precursor to <b>Make Overnight Inoculum</b>. The plates are pulled from the 37 C incubator and checked for growth and contamination. If there is no growth, the plate is thrown out and the user is notified. Plates with growth are stored at 4 C.

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cost_model:
# Check Plate/Imaging Cost Model

# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 18.63 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: 0.04+l }
end

protocol:
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/Cloning"

# TO DO:
    # Create option for "there are baby colonies but they're not big enough for protocols" case--put back in incubator
    # Re-streak the plate if there's too much contamination--fire check plate again in 24 hrs, probably collection

class Protocol
  include Debug
  include Cloning
  
  def main
    operations.sort_by! {|op| op.input("Plate").item.id}
    # Take plates
    operations.retrieve
    
    # Count the number of colonies
    info = get_colony_numbers
    
    # Update plate data
    update_item_data info
    
    # Delete and discard any plates that have 0 colonies
    discard_bad_plates if operations.any? { |op| op.temporary[:delete] }
    
    return {} if check_for_errors
    
    # Parafilm and label plates
    parafilm_and_store
    
    return {}
  end
  
  
  
  # Count the number of colonies and select whether the growth is normal, contaminated, or a lawn
  def get_colony_numbers
    show do
      title "Estimate colony numbers"
      
      operations.each do |op|
        plate = op.input("Plate").item
        get "number", var: "n_white#{plate.id}", label: "Estimate how many white colonies are on #{plate}", default: 0
        get "number", var: "n_blue#{plate.id}", label: "Estimate how many blue colonies are on #{plate}", default: 0
        get "number", var: "n_red#{plate.id}", label: "Estimate how many red colonies are on #{plate}", default: 0
        select ["normal", "contamination", "lawn"], var: "s#{plate.id}", label: "Choose whether there is contamination, a lawn, or whether it's normal.", default: 0
      end
    end    
  end
  
  # Alter data of the virtual item to represent its actual state
  def update_item_data info
    operations.each do |op|
      plate = op.input("Plate").item
      log_info "", info["n_white#{plate.id}".to_sym]
      log_info "", info["n_red#{plate.id}".to_sym]
      log_info "", info["n_blue#{plate.id}".to_sym]
      if (info["s#{plate.id}".to_sym] == "normal") && (info["n_white#{plate.id}".to_sym] == 0) && (info["n_blue#{plate.id}".to_sym] == 0) && (info["n_red#{plate.id}".to_sym] == 0)
        plate.mark_as_deleted
        plate.save
        op.temporary[:delete] = true
        op.error :no_colonies, "There are no colonies for plate #{plate.id}"
      else
        plate.associate :white_colonies, info["n_white#{plate.id}".to_sym]
        plate.associate :blue_colonies, info["n_blue#{plate.id}".to_sym] if !(info["n_blue#{plate.id}".to_sym] == 0)
        plate.associate :red_colonies, info["n_red#{plate.id}".to_sym] if !(info["n_red#{plate.id}".to_sym] == 0)
        plate.associate :status, info["s#{plate.id}".to_sym]
        checked_ot = ObjectType.find_by_name("Checked E coli Plate of Plasmid")
        plate.object_type_id = checked_ot.id
        plate.object_type = checked_ot
        plate.save
        op.pass("Plate","Plate")
      end
    end
  end
  
  # discard any plates that have 0 colonies
  def discard_bad_plates
      show do 
        title "Discard Plates"
        discard_plate_ids = operations.select { |op| op.temporary[:delete] }.map { |op| op.input("Plate").item.id }
        note "Discard the following plates with 0 colonies: #{discard_plate_ids.to_sentence}"
    end
  end
  
  
  # Parafilm and label any plates that have suitable growth
  def parafilm_and_store
    plates_to_parafilm = operations.reject{|op| op.temporary[:delete] }.map{|op| op.input("Plate").item}
    show do 
      title "Label and Parafilm"
      check "Confirm that plates #{plates_to_parafilm.map{ |i| i.id }.to_sentence} are labelled with their item ID numbers on the side (outside edge of plate) and the bottom of the plate."
      check "Confirm that plates are labelled with the proper storage location on the side (outside edge of plate) and the bottom of the plate, and parafilm each one."
      warning "The location will appear on the next page."
    end
    
    #Put plates back under control of wizard (were in incubator)
    plates_to_parafilm.each do |i|
        wiz = Wizard.find_by_name(i.object_type.prefix)
        i.move wiz.int_to_location(wiz.next.number)
        wiz.save
        i.save
    end 

    release plates_to_parafilm, interactive: true
  end
end
