config:
  title: Combine Items
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Digested DNA, description: Temporary samples containing a digested piece of double stranded DNA.}
    - {name: Input DNA, ftype: sample, required: true, sample_types: [Plasmid, Fragment]}
    - {name: Restriction Enzyme 1, ftype: sample, choices: EcoRI, SpeI, XbaI, SacI, required: true, sample_types: [Enzyme]}
    - {name: Restriction Enzyme 2, ftype: sample, required: true, sample_types: [Enzyme]}
    - {name: Length, ftype: number, required: true}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Digested DNA Stock, description: A fragment of dsDNA that has already been digested with enzymes and has phosphorylated ends. Typically has sticky ends., handler: sample_container, data: { "min_conc": 0.0000000010, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20SOP, sample_type_name: Digested DNA}
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operation_type: Combine Items
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Items to Combine, sample_types: [Plasmid, Fragment, Digested DNA], object_types: [Plasmid Stock, Fragment Stock, Digested DNA Stock], array: true, routing: I}
  - {ftype: sample, role: output, name: Combined Item, sample_types: [Plasmid, Fragment, Digested DNA], object_types: [Plasmid Stock, Fragment Stock, Digested DNA Stock], routing: O}
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documentation:
Mixes input items together in a single container. Data associations of the input items (if any) are not retained.

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cost_model:
# Not up-to-date (4/17/20)

def cost(_op)
  { labor: 0, materials: 0 }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug Lib"

class Protocol
    include Cloning
    include Debug
    def main
        current_taken_items = []
        input_volumes = {}
        output_volumes = {}
        check_user_inputs ["Items to Combine"], input_volumes, current_taken_items
        return {} if check_for_errors
        
        robust_take_inputs ["Items to Combine"], current_taken_items, interactive: true
        robust_make ["Combined Item"], current_taken_items
        table_matrix = Array.new() {Array.new()}
        table_matrix[0] = ["Items to Combine", "Output Item"]
        operations.running.each_with_index do |op, i|
            table_matrix[i+1] = [op.input_array("Items to Combine").items.to_sentence, {content: op.output("Combined Item").item.to_s, check: true}]
        end
        show do
            title "Combine items based on the following table"
            note "Create and label the following output items by combining input items (transfer full volumes of input items to output item containers)"
            table table_matrix
            check "Discard empty input items."
        end
        operations.each{|op| op.input_array("Items to Combine").items.each{|i| i.mark_as_deleted}}
        characterize operations.running.map{|op| op.output("Combined Item").item}, current_taken_items
        operations.running.store io:"output", interactive: true
        return {}
    end
end
