config:
  title: Confirm Sequencing Results
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
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object_types:
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
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operation_type: Confirm Sequencing Results
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
  - {ftype: sample, role: output, name: Plasmid, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
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documentation:
This is run after <b>Upload Sequencing Results</b> and can be used as a precurser to any operations which the user would like to delay until sequencing results have arrived.<br><br>

<b>Important notes on user confirmation of sequencing results:</b><br>
    -"Send to Sequencing" should always be followed by "Upload Sequencing Results"<br>
    -If "Confirm Sequencing Results" is added after "Upload Sequencing Results", anything downstream of "Confirm Sequencing Results" will wait for the user to confirm or reject the sequencing results before continuing.<br>
    -When sequencing results arrive, you will receive an email with instructions on how to view and confirm/reject your results.<br>

precondition:
def precondition(op)
  if op.input("Plasmid").item && (!op.input("Plasmid").item.get(:sequencing_approved).nil? || !op.input("Plasmid").item.get(:delete_requested).nil?)
      true
  else
      false
  end
end

cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 0.01 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: l }
end

protocol:
needs "Standard Libs/Debug Lib"
class Protocol 
  include Debug
  def main
    
    #The actual protocol doesn't do much here. See the precondition code. This operation type will be "waiting" until the user has added the special association "sequencing_ok" or the special association "delete_requested"
    show do
        title "Click OK"
        note "Click OK."
        note "No technician action is required. This operation type serves as a checkpoint."
    end
    
    operations.each do |op|
        if Random.rand > 0.4
            op.input("Plasmid").item.associate(:delete_requested, "delete requested").save
        end
        if Random.rand > 0.4
            op.input("Plasmid").item.mark_as_deleted
        end
        if Random.rand > 0.25
            op.input("Plasmid").item.associate(:from_culture, (Random.rand*1000).round).save
        end
    end if debug
    
    #pass through plasmid and error op if the user has requested that the input item should be deleted
    operations.each do |op| 
        op.pass("Plasmid","Plasmid")
        if !op.input("Plasmid").item.get(:delete_requested).nil?
            op.error :incorrect_seq_results, "Automatically cancelled due to incorrect sequencing results."
            if op.input("Plasmid").item.get(:from_culture)
                ot_id = ObjectType.select{|ot| ot.name == "Plasmid Glycerol Stock"}.first.id
                gstocks = Item.where(object_type_id: ot_id)
                gstocks.each do |gstock|
                    gstock.associate(:from_culture, op.input("Plasmid").item.get(:from_culture)).save if (debug && Random.rand > 0.95)
                    if gstock.get(:from_culture) && gstock.get(:from_culture).to_s == op.input("Plasmid").item.get(:from_culture).to_s
                        gstock.associate(:delete_requested, "A plasmid from the same culture was sequenced and found to be incorrect, this item has been automatically marked for disposal.").save
                    end
                end
            end
        end
    end
    
    return {}
  end
end
