config:
  title: Extract Gel Fragment
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Digested DNA, description: Temporary samples containing a digested piece of double stranded DNA.}
    - {name: Input DNA, ftype: sample, required: true, sample_types: [Plasmid, Fragment]}
    - {name: Restriction Enzyme 1, ftype: sample, choices: EcoRI, SpeI, XbaI, SacI, required: true, sample_types: [Enzyme]}
    - {name: Restriction Enzyme 2, ftype: sample, required: true, sample_types: [Enzyme]}
    - {name: Length, ftype: number, required: true}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Agarose Gel, description: An agarose gel. May contain up to 100 lanes and be any percentage, handler: collection, unit: gel, release_method: return, release_description: Return this item., rows: 1, columns: 12}
  - {name: Gel Slice, description: Gel Slice cut from a gel lane after gel was run. Often placed in a 1.5 mL tube., handler: sample_container, unit: Fragment, release_method: dispose, prefix: M20SOP, sample_type_name: Fragment}
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operation_type: Extract Gel Fragment
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Fragment, sample_types: [Fragment, Digested DNA], object_types: [Agarose Gel, Agarose Gel], part: true, routing: F}
  - {ftype: sample, role: output, name: Fragment, sample_types: [Fragment, Digested DNA], object_types: [Gel Slice, Gel Slice], routing: F}
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documentation:
This is run after <b>Run On Agarose Gel</b> and is a precursor to <b>Purify Gel Slice</b>. The technician will acquire and upload an image of the gel, then verify whether or not the fragment matches the expected size. If the fragment is the correct length, the fragment is extracted from the gel; if it isn't, the operation errors out and the fragment is thrown out.

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cost_model:
# Extract Fragment from Gel Cost Model

# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 5.88 * Parameter.get_float('labor rate (min)')
    {labor:0, materials: 0.38+l}      
end

protocol:
# Extract Fragment Protocol
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/Cloning"

class Protocol
    include Debug
    include Cloning
    
    def main
        operations.retrieve(interactive: false )
        operations.sort_by! {|op| [op.input("Fragment").item.id, op.input("Fragment").column]}
        
        gel_ids = operations.map {|op| op.input("Fragment").item.id}.uniq
        gels = gel_ids.map {|id| operations.select {|op| op.input("Fragment").item.id == id}}
        gels.each {|gel| gel.extend(OperationList)}
        gel_uploads = {}
        
        gels.each do |gel|
            show do
                title "Image gel #{gel[0].input("Fragment").item.id}"
                warning "Always wear gloves when dealing with gels and gel imager."
                check "Pull out drawer of gel imager. Clean the XcitaBlue conversion screen and the razor blade with ethanol."
                warning "Be careful while dealing with the razor blade!"
                check "Check that the filter is set to position 1 (top of gel imager)."
                check "Place gel #{gel[0].input("Fragment").item.id} on the center of the XcitaBlue conversion screen, and push in drawer of gel imager."
                check "Open Image Lab program. Click File->Open and select the \"Agarose Gel EtBr\" protocol under \"Documents\\My Documents\\Image Lab Protocols\"."
                check "Select \"Position Gel\". Confirm that the gel is centered and that zoom is set correctly. Open door to adjust gel if necessary."
                check "Select \"Run Protocol\"."
            end
            
            data = show do
                title "Export and print image"
                check "While the image window is selected, click File->Export->Export for Publication... Change resolution to 600 dpi and click \"Export\". Save to folder  \"Documents\\Image Lab Images\" with the filename \"#{gel[0].input("Fragment").item.id}\"."
                check "Upload the image:"
                upload var: "gel_image"
                check "In the image window, select image transform button and check \"Invert image display\"."
                check "Print the image (using MITSUBISHI P95D) and give printout to lab manager."
                warning "Wait for the image to finish uploading before continuing!"
            end
            
            gel.each do |op|
                op.associate(:image,{},Upload.find(data[:gel_image][0][:id])) if !debug
                op.associate(:lane_in_gel, "Operation output (#{op.input("Fragment").sample.name}) can be seen in lane #{op.input("Fragment").column + 2}. Lanes numbered left to right with ladder in lane 1.")
            end
            
            show do
                title "Verify Fragment Lengths"
                note "Note: lane 1 is reserved for the ladder"
                table gel.start_table
                .custom_column(heading: "Gel ID") { |op| op.input("Fragment").item.id }
                .custom_column(heading: "Lane") { |op| op.input("Fragment").column + 2 }
                .custom_column(heading: "Expected Length") { |op| op.input("Fragment").sample.properties["Length"] }
                .get(:correct, type: 'text', heading: "Does the band match the expected length? (y/n)", default: "y")
                .end_table
            end
            
            gel.each do |op|
                if op.temporary[:correct].upcase.start_with?("N")
                    op.error :incorrect_length, "No fragment found with the expected length."
                end
            end
            
            return {} if check_for_errors
            
            gel.make
            
            show do
                title "Cut Out Fragments"
                warning "Ensure that XcitaBlue Conversion Screen is in place and wear orange-tinted XcitaBlue viewing glasses to protect your eyes from the strong blue light."
                check "Take out #{operations.running.length} 1.5 mL tubes and label accordingly: #{gel.running.collect { |op| op.output("Fragment").item.id }.to_sentence}"
                check "Pull out drawer of gel imager and press the \"Trans UV\" button on the gel imager to view bands. Only activate light during the few seconds required to cut out a band."
                note "Place cut out bands into 1.5 mL tubes according to the following table:"
                note "Note: lane 1 is reserved for the ladder"
                table gel.running.start_table 
                .custom_column(heading: "Gel ID") { |op| op.input("Fragment").item.id }
                .custom_column(heading: "Lane") { |op| op.input("Fragment").column + 2 }
                .custom_column(heading: "1.5 mL Tube ID") { |op| op.output("Fragment").item.id }
                .end_table
            end
            
            show do
                title "Weight Gel Slices"
                note "Perform this step using the scale inside the chemical room."
                check "Zero the scale with an empty 1.5 mL tube."
                warning "Be sure that weight is set to grams (not milligrams)"
                check "Weigh each slice and enter the weights in the following table:"
                table gel.running.start_table
                .custom_column(heading: "1.5 mL Tube ID") { |op| op.output("Fragment").item.id }
                .get(:weight, type: 'number', heading: "Weight (g)", default: 0.123)
                .end_table
            end
            
            gel.running.each do |op|
                op.output("Fragment").item.associate :weight, op.temporary[:weight]
            end
            
            choice = show do
                title "Clean Up"
                check "Close image and protocol windows inside Image Lab program."
                check "Double check that the drawer of the gel imager is pushed in and the \"Trans UV\" light is turned off."
                check "Dispose of the gel and any gel parts by placing it in the gel waste container. Spray the surface of the transilluminator with ethanol and wipe until dry using a paper towel."
                check "Clean up the gel box and casting tray by rinsing with water. Return them to the gel station."
                check "Dispose of gloves used for extracting fragment."
            end
            gel[0].input("Fragment").item.mark_as_deleted
            gel.running.store io:"output", method: "boxes", interactive: true   
        end
        return {}
    end

end
