config:
  title: Ligation
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Digested DNA, description: Temporary samples containing a digested piece of double stranded DNA.}
    - {name: Input DNA, ftype: sample, required: true, sample_types: [Plasmid, Fragment]}
    - {name: Restriction Enzyme 1, ftype: sample, choices: EcoRI, SpeI, XbaI, SacI, required: true, sample_types: [Enzyme]}
    - {name: Restriction Enzyme 2, ftype: sample, required: true, sample_types: [Enzyme]}
    - {name: Length, ftype: number, required: true}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Digested DNA Stock, description: A fragment of dsDNA that has already been digested with enzymes and has phosphorylated ends. Typically has sticky ends., handler: sample_container, data: { "min_conc": 0.0000000010, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20SOP, sample_type_name: Digested DNA}
  - {name: Ligation product, description: A low concentration, possibly multi-species, product of a ligation reaction. Suitable for transformation or use as a PCR template., handler: sample_container, data: { "max_vol": 2000, "short_description":"1.5 mL tube"}, unit: Plasmid stock, release_method: return, prefix: M20SRX, sample_type_name: Plasmid}
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operation_type: Ligation
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Insert, sample_types: [Digested DNA], object_types: [Digested DNA Stock], array: true, routing: I}
  - {ftype: sample, role: output, name: Ligation Product, sample_types: [Plasmid], object_types: [Ligation product], routing: P}
  - {ftype: sample, role: input, name: Vector, sample_types: [Digested DNA], object_types: [Digested DNA Stock], routing: V}
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documentation:
This is run using digested DNA stock items (created by running <b>Restriction Digest and either Purify DNA from Reaction or Run On Agarose Gel -> Extract Fragment -> Purify Gel Slice</b> and is a precursor to <b>Transformation</b>. The technician will perform a ligation reaction using the specified vector fragment and insert fragments using T4 DNA Ligase. Up to 5 inserts (plus 1 vector) can be assembled using this protocol.<br><br>

------<b>Input Volume(s)</b>------<br>
Vector -> 1 µl<br>
Insert -> 3 µl<br><br>

------<b>Output Volume(s)</b>------<br>
Ligation Product -> 17 µl<br>

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cost_model:
# Assemble Plasmid/Gibson Cost Model

# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor
# Average run time for ligation is based off the average run time for restriciton digestion

def cost(op)
    l = 15.32 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: 1.3+l }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug Lib"

# Based on https://www.neb.com/protocols/0001/01/01/quick-ligation-protocol
# Optimized using data from https://www.ncbi.nlm.nih.gov/pmc/articles/PMC338853/pdf/nar00163-0413.pdf

class Protocol
    
  include Debug
  include Cloning
  REACTION_VOLUME = 20.0
  
  def main
      
    current_taken_items = []
    # Remember to add volume information to input and output object types (and concentration data where applicable).
    input_volumes = {"Insert" => (REACTION_VOLUME / 5.0).round(2), "Vector" => (REACTION_VOLUME / 20.0).round(2), "Ligase" => (REACTION_VOLUME / 20.0).round(2), "Buffer" => (REACTION_VOLUME / 10.0).round(2)}
    output_volumes = {"Ligation Product" => (REACTION_VOLUME*0.95 - 2.0).round}
    
    show do
        title "Keep all items on ice"
        warning "Note: All items used in this protocol should be kept on ice (or thawed at room temperature then immediately transfered to ice)."
    end
    
    operations.add_static_inputs "Ligase", "T4 HC DNA Ligase", "Enzyme Stock"
    operations.add_static_inputs "Buffer", "T4 DNA Ligase Buffer", "Enzyme Buffer Stock"
    check_user_inputs ["Insert", "Vector"], input_volumes, current_taken_items
    assign_input_items ["Ligase", "Buffer"], input_volumes, current_taken_items
    return {} if check_for_errors
    operations.sort_by! {|op| [op.input("Vector").item.id, op.input_array("Insert").items[0].id]}
    
    operations.each do |op|
        water_to_add = (REACTION_VOLUME - input_volumes["Insert"]*op.input_array("Insert").items.count - input_volumes["Vector"] - input_volumes["Ligase"] - input_volumes["Buffer"]).round(2)
        if water_to_add > 0.000001
            op.temporary[:water_to_add] = water_to_add
        else
            op.error :volume_error, "Water to add evaluated to negative value, possibly due to too many inputs."
        end
    end
    
    robust_make ["Ligation Product"], current_taken_items
    
    robust_take_inputs ["Insert", "Vector", "Buffer"], current_taken_items, interactive: true
    
    show do
        title "Add reagents to reaction tubes"
        note "Get out #{operations.running.count} new 1.5 ml tubes. Label and add reagents to tubes according to the following table."
        table operations.start_table
        .output_item("Ligation Product")
        .custom_column(heading: "Buffer to add", checkable: true) { |op| "#{input_volumes["Buffer"]} µl of #{op.input("Buffer").item.id} (#{op.input("Buffer").sample.name})"}
        .custom_column(heading: "Water to add", checkable: true) { |op| "#{op.temporary[:water_to_add]} µl of water"}
        .custom_column(heading: "Vector to add", checkable: true) { |op| "#{input_volumes["Vector"]} µl of #{op.input("Vector").item.id}"}
        .custom_column(heading: "Inserts to add", checkable: true) { |op| op.input_array("Insert").items.each_with_index.map {|insert, i| "#{input_volumes["Insert"]} µl of #{insert.id}"}.join(", ")}
        .end_table
    end
    
    robust_release_inputs ["Insert", "Vector", "Buffer"], current_taken_items, interactive: true
    
    robust_take_inputs ["Ligase"], current_taken_items, interactive: true
    
    show do
        title "Add #{operations.running[0].input("Ligase").sample.name} to reaction tubes"
        note "Add #{operations.running[0].input("Ligase").sample.name} to reaction tubes according to the following table"
        table operations.start_table
        .output_item("Ligation Product")
        .custom_column(heading: "Ligase", checkable: true) { |op| "#{input_volumes["Ligase"]} µl of #{op.input("Ligase").item.id} (#{op.input("Ligase").sample.name})"}
        .end_table
    end
    
    robust_release_inputs ["Ligase"], current_taken_items, interactive: true
    
    show do
      title "Centrifuge reactions"
      check "Briefly spin down reactions in the microcentrifuge by holding the \">>\" button for 3 seconds to collect liquid at the bottom of tubes"
      warning "Make sure to balance the centrifuge!"
    end
    
    # Display table to tech
    show do
        title "Allow reaction to occur on bench (room temperature)"
        note "Let reactions sit at the bench for 2 hours (at room temperature)"
        timer initial: { hours: 2, minutes: 0, seconds: 0}
        warning "After incubation, the ligation products should be used immediately. Do not store overnight."
    end
    
    store_outputs_with_volumes output_volumes, current_taken_items, interactive: true
    return {}
  end
end
