config:
  title: Make Glycerol Stock
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
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object_types:
  - {name: Small LB Overnight Culture, description: An overnight of E. coli transformed with a plasmid in LB + antibiotic, handler: sample_container, data: {"max_vol": 10000, "short_description":"15 mL tube"}, unit: Plasmid, release_method: dispose, prefix: Shaker, sample_type_name: Plasmid}
  - {name: Plasmid Glycerol Stock, description: Glycerol Stock of E. coli (usually DH5alpha) containing plasmid DNA stock, handler: sample_container, unit: Plasmid, release_method: return, prefix: M80GS, sample_type_name: Plasmid}
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operation_type: Make Glycerol Stock
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Overnight, sample_types: [Plasmid], object_types: [Small LB Overnight Culture], routing: P}
  - {ftype: sample, role: output, name: Glycerol Stock, sample_types: [Plasmid], object_types: [Plasmid Glycerol Stock], routing: P}
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documentation:
This is run after <b>Make Overnight Inoculum</b> and is a precursor to <b>Make Overnight Inoculum</b>. Instructs the tech to create a glycerol stock of the plasmid in E. coli for long-term storage.

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 22 * Parameter.get_float('labor rate (min)')
  { labor: 0, materials: 0.45+l }
end

protocol:
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/Cloning"

class Protocol
  include Cloning
  include Debug
  
  def main
    current_taken_items = []
    operations.sort_by! {|op| op.input("Overnight").item.id}

    robust_take_inputs ["Overnight"], current_taken_items, interactive: true
    
    # Verify whether each overnight has growth
    verify_growth = show do
        title "Check if overnights have growth"
        note "Choose No for the overnight that does not have growth and throw them away or put in the clean station."
        operations.each do |op|
            item = op.input("Overnight").item
            select ["Yes", "No"], var: "#{item.id}", label: "Does tube #{item.id} have growth?"
            item.mark_as_deleted
        end
    end
    
    # if no growth, error op  
    operations.each do |op|
        item = op.input("Overnight").item
        if verify_growth["#{item.id}".to_sym] == "No"
            op.error :no_growth, "The overnight has no growth."
        end
    end
    return {} if check_for_errors
    
    robust_make ["Glycerol Stock"], current_taken_items
    
    show do 
        title "Add glycerol to cryo tubes"
        check "Insert the small green cap into the top of the cryo tubes."
        check "Write the following IDs on the top and the side of cryo tubes: #{operations.running.map{|op| op.output("Glycerol Stock").item.id}.to_sentence}"
        check "Turn on bunsen burner and work close to flame."
        check "Pipette 900 µL of 50% glycerol (on shelf at Cell Culture Station) into each tube."
        warning "Do not contaminate the 50% glycerol solution."
    end
    
    show do 
        title "Add cultures to cryo tubes"
        note "Transfer from cultures to cryo tubes according to the following table:"
        table operations.start_table
            .output_item("Glycerol Stock")
            .custom_column(heading: "Culture item (input)") {|op| {content: "900 µl of #{op.input("Overnight").item.to_s}", check: true}}
            .end_table
    end
    
    show do 
        title "Vortex and Store"
        check "Close the flame"
        check "Vortex the tubes for 2 seconds."
        warning "Lable the storage location on the side of the cryo tubes before return the glycerol stock to the -80 freezer."
    end
    
    operations.running.each do |op|
        op.output("Glycerol Stock").item.associate(:from_culture, op.input("Overnight").item.id.to_s).save
    end
    
    robust_release operations.running.map{|op| op.output("Glycerol Stock").item}, current_taken_items, interactive: true
    
    show do
        title "Discard overnight cultures"
        check "Discard overnight cultures: #{operations.running.map{|op| op.input("Overnight").item}.to_sentence}"
    end
    check_for_errors
    return {}
  end
end
