config:
  title: MoGib
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
  - {name: E coli Glycerol Stock, description: Long term storage of E. coli in the -80C, handler: sample_container, unit: E coli strain, release_method: return, prefix: M80ECC, sample_type_name: E. coli strain}
  - {name: MoGib Reaction Result, description: Result of a Modular Gibson Reaction, handler: sample_container, unit: Plasmid, release_method: return, prefix: M20SRX, sample_type_name: Plasmid}
  - {name: Enzyme Stock, description: Enzyme stocks in their original containers from the vendor., handler: sample_container, data: {"max_vol": 1500, "short_description":"1.5 mL tube", "custom_wizards":{"M20SR":1, "M20EB":9999}, "opentrons_labware": "24-well-1.5ml-rack"}, unit: 1 uL, release_method: query, release_description: Dispose only if empty, otherwise return., prefix: M20EB, sample_type_name: Enzyme}
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operation_type: MoGib
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: DNA Fragment, sample_types: [Fragment, Plasmid, Plasmid], object_types: [Fragment Stock, Plasmid Stock, E coli Glycerol Stock], array: true, routing: DF}
  - {ftype: sample, role: output, name: MoGib, sample_types: [Plasmid], object_types: [MoGib Reaction Result], routing: MG}
  - {ftype: sample, role: input, name: 2x Gibson Mix, sample_types: [Enzyme], object_types: [Enzyme Stock], routing: DB}
  - {ftype: sample, role: input, name: PmeI, sample_types: [Enzyme], object_types: [Enzyme Stock], routing: RE}
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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor
# Average run time for MoGib is calculated based on both Gibson and MoClo

def cost(op)
    l = 28.72 * Parameter.get_float('labor rate (min)') 
    {labor: 0, materials: 5.59+l }
end

protocol:
class Protocol

  def main

    operations.retrieve.make
    
    fragments = {}
    conc_Table = []
    
    # Prepare PCR Machine 
    show do
        title "Prepare bench"
        check "If the PCR machine is off (no numbers displayed), turn it on using the ON/STDBY button - the button will be on the back of the machine."
        check "Select MoGib program and confirm…"
        bullet "37oC for 15 minutes"
        bullet "50oC for 60 minutes"
        bullet "4oC hold"
        check "Confirm that the lid heat is set up to 105oC"
        image "SelectTheProgramOnThermocycler.jpg"

    end
    
    # Thaw 2x Gibson Mix
    show do
        title "Thaw 2x Gibson Mix"
        check "Thaw 2x Gibson Mix on the bench."
        check "Get an ice bucket filled with ice."
        check "As soon as the Gibson mix is thawed, place it on ice."
        image "moclolevel1/moclol1_Picture1.jpg"
    end
    
    # Readying the PmeI Restriction Enzyme
    show do
        title "Readying the PmeI Restriction Enzyme"
        my_ops = operations.running.select do |op|
            note "Place #{op.input("PmeI").sample.name} in a -20oC ice box, on the bench"
        end
        image "moclolevel1/moclol1_Picture2.jpg"
    end
    
    show do
      title "Enter the concentration and base pair size of the DNA stock"
      
      note "We're going to dilute this sample to 20 fmol/ul by calculating the amount of water you need to add to each sample - our software will do the calculation for you."
      note "Enter the concentration of the DNA samples that should be listed on the DNA samples' tubes - the unit value needs to be in ng/ul. "
      
      # table for fragment concentration & bp
      frag_table = [["DNA Fragment", "Concentration (ng/ul)", "Base Pair Size"]]
      operations.each do |op|
        op.input_array("DNA Fragment").each do |frag|
            frag_table.push [
                { content: frag.sample.name },
                { type: "number", operation_id: op.id, key: "conc_#{frag.id}".to_sym, default: 40 },
                { type: "number", operation_id: op.id, key: "bp_#{frag.id}".to_sym, default: 50 }
            ]
        end
      end
      
      table frag_table
    end
    
    show do
      title "Dilute the DNA in a separate tube"
      
      note "Use the table values below to dilute the DNA"
      
        conc_Table = [
            ["DNA Fragment", "Conc. (ng/ul)", "Conc. (ug/ul)", "Size (bp)", 
            "Molecular Weight of a Base Pair", "1/N where N is base pairs", "pMol DNA/uL", "fmol DNA/uL",
            "DNA to add", "Water to add", "uL to get 40 fmol", "fmol DNA"]
        ]
        operations.running.each do |op|
            fragments = op.input_array("DNA Fragment")
            
            fragments.each do |f|
                conc_ug = op.temporary["conc_#{f.id}".to_sym]/1000.0
                bp_weight = (10**6)/(660)
                one_over_n = 1.0/op.temporary["bp_#{f.id}".to_sym]
                pMol = (conc_ug * bp_weight * one_over_n).round(3)
                fMol = op.temporary["conc_#{f.id}".to_sym] * bp_weight * one_over_n
                dna_to_add = (400.0/((op.temporary["conc_#{f.id}".to_sym]) * bp_weight * (one_over_n))).round(1)
                water_to_add = (20.0 - (400.0/(((op.temporary["conc_#{f.id}".to_sym] / 1000.0) * bp_weight * one_over_n) * 1000.0))).round(1)
                ul_to_forty = 1.0
                fmolDNA = 40.0
                
                conc_Table.push([f.sample.name, op.temporary["conc_#{f.id}".to_sym], conc_ug, op.temporary["bp_#{f.id}".to_sym],
                bp_weight, one_over_n, pMol, fMol, 
                dna_to_add, water_to_add, ul_to_forty, fmolDNA])
            end
        end
        
        table conc_Table
        
        warning "Remember to dilute the DNA in a tube separate from the one that is carrying the DNA"
    end
    

    
    # PCR Plate or Tube
    show do
        title "Start the Reaction"
        check "Retrieve a PCR tube/plate for the reaction we're about to perform"
        note "Add the following to the reaction tube/well to make a total of 10 ul of solution:"
        
        operations.running.select do |op|
            fragments.each do |f|
                bullet "1ul of #{f.sample.name}"
            end
            bullet "5ul of #{op.input("2x Gibson Mix").sample.name}"
            bullet "1ul of #{op.input("PmeI").sample.name}"
            bullet "#{10-(fragments.length*1)-6.0}ul of autoclaved dH2O"
        end
        image "moclolevel1/moclol1_Picture3.jpg"
    end

    # Display table to tech
    show do
        title "Centrifuge the Reaction"
        warning "Close PCR tubes or seal the plate"
        check "Spin the PCR tubes or the PCR plate to collect the liquid at the bottom"
        image "moclolevel1/moclol1_Picture4.jpg"
    end
    
    operations.store(io: "input", interactive: true)
    
    # Display table to tech
    show do
        title "Incubate the reaction at the PCR machine"
        timer initial: { hours: 1, minutes: 15, seconds: 0}
        warning "After clicking OK from this screen, the protocol will end and you will be directed on where to return the items to their freezer location."
        image "moclolevel1/moclol1_Picture5.jpg"
    end
    
    operations.store(io: "output", interactive: true)
   
    
    return {}
    
  end

end
