config:
  title: Modular Cloning
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
  - {name: PCR Result, description: PCR results that contain the fragment we aim to amplify out., handler: sample_container, data: { "max_vol": 100, "short_description":"PCR tube"}, unit: Fragment, release_method: query, release_description: Dispose if there is less than 5 ?L., prefix: M20SRX, sample_type_name: Fragment}
  - {name: MoClo Reaction Result, description: The result of a Modular Cloning Reaction, handler: sample_container, data: { "max_vol": 100, "short_description":"PCR tube"}, unit: Plasmid, release_method: return, prefix: M20SRX, sample_type_name: Plasmid}
  - {name: Enzyme Stock, description: Enzyme stocks in their original containers from the vendor., handler: sample_container, data: {"max_vol": 1500, "short_description":"1.5 mL tube", "custom_wizards":{"M20SR":1, "M20EB":9999}, "opentrons_labware": "24-well-1.5ml-rack"}, unit: 1 uL, release_method: query, release_description: Dispose only if empty, otherwise return., prefix: M20EB, sample_type_name: Enzyme}
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operation_type: Modular Cloning
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Insert, sample_types: [Fragment, Plasmid, Fragment], object_types: [Fragment Stock, Plasmid Stock, PCR Result], array: true, routing: I}
  - {ftype: sample, role: output, name: MoClo Reaction Product, sample_types: [Plasmid], object_types: [MoClo Reaction Result], routing: P}
  - {ftype: sample, role: input, name: Vector, sample_types: [Plasmid, Fragment], object_types: [Plasmid Stock, Fragment Stock], routing: V}
  - {ftype: sample, role: input, name: MoClo Restriction Enzyme, sample_types: [Enzyme], object_types: [Enzyme Stock], routing: E}
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documentation:
This is run using plasmid stock or linear dsDNA stock items and is a precursor to <b>Transformation</b>. The technician will perform a modular cloning (MoClo) reaction using the specified vector and inserts using T4 DNA Ligase and the specified MoClo restriction enzyme. Up to 7 inserts (plus 1 vector) can be assembled at once using this protocol.<br><br>

------<b>Input Volume(s)</b>------<br>
Vector -> 2 µl<br>
Insert -> 2 µl<br><br>

------<b>Output Volume(s)</b>------<br>
MoClo Reaction Product -> 17 µl  

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 7.82 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: 2.93+l }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/OpenTronsAq"

# DESIGNED FOR BATCHES OF 1 T0 32 OPERATIONS
class Protocol
  include Debug
  include Cloning
  include OpenTronsAq

  REACTION_VOLUME = 20.0
    
  TOTAL_THERMOCYCLERS = 1

  BLOCKS_PER_THERMOCYCLER = 3
  ZONES_PER_BLOCK = 2
  REACTIONS_PER_ZONE = 16

  def main
    current_taken_items = []
    input_volumes = {"Insert" => (REACTION_VOLUME / 10.0).round(2), "Vector" => (REACTION_VOLUME / 10.0).round(2), "Ligase" => (REACTION_VOLUME / 40.0).round(2), "MoClo Restriction Enzyme" => (REACTION_VOLUME / 20.0), "Buffer" => (REACTION_VOLUME / 10.0).round(2)}
    output_volumes = {"MoClo Reaction Product" => (REACTION_VOLUME*0.95 - 2.0).round}
    
    data = show do
	    title "Check if at least one thermocycler block is available"
	    warning "Warning: Selecting \"No\" will abort the protocol."
	    select [ "Yes", "No"], var: "choice", label: "Is there at least 1 thermocycler block currently available?", default: 0
	end

	if data[:choice] == "No"
	    show do
            title "Number of reactions scheduled exceeds available capacity."
            note "Number of reactions scheduled exceeds available capacity."
	        warning "Aborting protocol. Please check with the lab manager for further instructions."
        end
	    return {}
	end
    
    show do
        title "Keep all items on ice"
        warning "Note: All items used in this protocol should be kept on ice (or thawed at room temperature then immediately transfered to ice)."
    end
    
    operations.add_static_inputs "Buffer", "T4 DNA Ligase Buffer", "Enzyme Buffer Stock"
    operations.add_static_inputs "Ligase", "T4 HC DNA Ligase", "Enzyme Stock"
    check_user_inputs ["Insert", "Vector"], input_volumes, current_taken_items
    assign_input_items ["Ligase", "MoClo Restriction Enzyme"], input_volumes, current_taken_items
    return {} if check_for_errors
    operations.sort_by! {|op| [op.input("Vector").item.id, op.input_array("Insert").items[0].id]}
    
    operations.running.each do |op|
        water_to_add = (REACTION_VOLUME - input_volumes["Insert"]*op.input_array("Insert").items.count - input_volumes["Vector"] - input_volumes["Ligase"] - input_volumes["MoClo Restriction Enzyme"] - input_volumes["Buffer"]).round(2)
        if water_to_add > 0.000001
            op.temporary[:water_to_add] = water_to_add
        else
            op.error :volume_error, "Water to add evaluated to negative value, possibly due to too many inputs."
        end
    end
    
    robust_make ["MoClo Reaction Product"], current_taken_items
    
    robust_take_inputs ["Insert", "Vector", "Buffer"], current_taken_items, interactive: true
    
    ot2_choice = show do
        title "Select execution method"
        select ["Yes", "No"], var: "ot2", label: "Is the OT2 robot available?"
    end
    
    if ot2_choice[:ot2] == "Yes"
        
        prot = OTAqProtocol.new
        
        prot.add_labware_definition('24-well-1.5ml-rack')

        water_container = prot.labware.load('point', '1', 'Water')
        water = prot.dummy_item "DI Water"
        prot.assign_wells [water], [water_container.wells(0)]
        
        td = prot.modules.load('tempdeck', '10')
        temp_deck_tubes = prot.labware.load('PCR-strip-tall', '10', 'Temp deck w/ PCR tubes')
        
        # p10 = prot.instruments.P10_Single(mount: 'right', tip_model: "tiprack-10ul")
        tip_racks = []
        tip_racks << prot.labware.load('tiprack-10ul', '3')
        tip_racks << prot.labware.load('tiprack-10ul', '6')
        p10 = prot.instruments.P10_Single(mount: 'right', tip_racks: tip_racks)
        
        # convenience function from Aq objects that lets you create labware
        prot.assign_wells operations.running.map{|op| op.output("MoClo Reaction Product").item}, temp_deck_tubes.wells[0..operations.running.count-1]
        
        prot.assign_wells operations.running.map{|op| op.input("MoClo Restriction Enzyme").item}.uniq
        prot.assign_wells operations.running.map{|op| op.input("Ligase").item}.uniq
        prot.assign_wells operations.running.map{|op| op.input("Buffer").item}.uniq
        prot.assign_wells operations.running.map{|op| op.input_array("Insert").items}.flatten.uniq
        prot.assign_wells operations.running.map{|op| op.input("Vector").item}.uniq
        
        td.set_temperature(37)
        
        p10.pick_up_tip
        operations.running.each do |op|
            while op.temporary[:water_to_add] > 10
                p10.aspirate(10, prot.find_well(water))
                p10.dispense(10, prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
                op.temporary[:water_to_add] -= 10
            end
            p10.aspirate(op.temporary[:water_to_add], prot.find_well(water))
            p10.dispense(op.temporary[:water_to_add], prot.find_well(op.output("MoClo Reaction Product").item))
        end
        p10.drop_tip
        
        p10.pick_up_tip
        operations.running.each do |op|
            p10.aspirate(input_volumes["Buffer"], prot.find_well(op.input("Buffer").item).bottom(0))
            p10.dispense(input_volumes["Buffer"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            p10.aspirate(input_volumes["Buffer"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            p10.dispense(input_volumes["Buffer"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
        end
        p10.drop_tip
        
        # Add other reagents
        operations.running.each do |op|
            p10.pick_up_tip
            p10.aspirate(input_volumes["Vector"], prot.find_well(op.input("Vector").item).bottom(0))
            p10.dispense(input_volumes["Vector"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            p10.drop_tip
            
            op.input_array("Insert").items.each do |insert_item|
                p10.pick_up_tip
                p10.aspirate(input_volumes["Insert"], prot.find_well(insert_item).bottom(0))
                p10.dispense(input_volumes["Insert"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
                p10.drop_tip
            end
            
            p10.pick_up_tip
            p10.aspirate(input_volumes["Ligase"], prot.find_well(op.input("Ligase").item).bottom(0))
            p10.dispense(input_volumes["Ligase"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            # Small mix to ensure ligase is added.
            p10.aspirate(5, prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            p10.dispense(5, prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            p10.drop_tip
            
            p10.pick_up_tip
            p10.aspirate(input_volumes["MoClo Restriction Enzyme"], prot.find_well(op.input("MoClo Restriction Enzyme").item).bottom(0))
            p10.dispense(input_volumes["MoClo Restriction Enzyme"], prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            # Final mix
            3.times do
                p10.aspirate(10, prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
                p10.dispense(10, prot.find_well(op.output("MoClo Reaction Product").item).bottom(0))
            end
            p10.drop_tip
        end
        
        td.wait_for_temp
        p10.delay(7200)
        
        td.set_temperature(50)
        p10.delay(400)
        
        td.set_temperature(80)
        p10.delay(600)
        
        td.set_temperature(4)
        
        robust_take_inputs ["Ligase", "MoClo Restriction Enzyme", "Vector", "Insert", "Buffer"], current_taken_items, interactive: true
        
        show do
            title "Prepare output PCR tubes."
            note "Get out #{operations.running.count} new PCR tubes and label with the following IDs: #{operations.running.map {|op| op.output("MoClo Reaction Product").item.id}.to_sentence}"
        end
        
        run_protocol prot
        
        show do
           title "Set timer for removing inputs"
           check "Set a timer for 20 min, after which the robot should be done pipetting and you can remove and store input items (see following slide)."
           timer initial: { hours: 0, minutes: 20, seconds: 0}
           check "Do NOT remove the output items (small PCR tubes on temperature block)."
        end
        
        robust_release_inputs ["Ligase", "MoClo Restriction Enzyme", "Vector", "Insert", "Buffer"], current_taken_items, interactive: true
        
        show do
            title "Set timer for storing outputs"
            check "Set a timer for 2 hrs, after which the reactions should be done incubating. At this point, you must reset the run to innactivate the temp block, and then store the output items (see following slides)."
           timer initial: { hours: 2, minutes: 0, seconds: 0}
        end
        
    else
        
        show do
            title "Add reagents to reaction tubes"
            note "Get out #{operations.running.count} new PCR tubes. Label and add reagents to tubes according to the following table:"
            table operations.start_table
            .output_item("MoClo Reaction Product")
            .custom_column(heading: "Buffer to add", checkable: true) { |op| "#{input_volumes["Buffer"]} µl of #{op.input("Buffer").item.id} (#{op.input("Buffer").sample.name})"}
            .custom_column(heading: "Water to add", checkable: true) { |op| "#{op.temporary[:water_to_add]} µl of water"}
            .custom_column(heading: "Vector to add", checkable: true) { |op| "#{input_volumes["Vector"]} µl of #{op.input("Vector").item.id}"}
            .custom_column(heading: "Inserts to add", checkable: true) { |op| op.input_array("Insert").items.each_with_index.map {|insert, i| "#{input_volumes["Insert"]} µl of #{insert.id}"}.join(", ")}
            .end_table
        end
        
        robust_release_inputs ["Insert", "Vector", "Buffer"], current_taken_items, interactive: true
        
        robust_take_inputs ["Ligase", "MoClo Restriction Enzyme"], current_taken_items, interactive: true
        
        show do
            title "Add #{operations.running[0].input("Ligase").sample.name} and MoClo enzymes to reaction tubes"
            note "Add #{operations.running[0].input("Ligase").sample.name} and MoClo enzymes to reaction tubes according to the following table:"
            table operations.start_table
            .output_item("MoClo Reaction Product")
            .custom_column(heading: "Ligase", checkable: true) { |op| "#{input_volumes["Ligase"]} µl of #{op.input("Ligase").item.id} (#{op.input("Ligase").sample.name})"}
            .custom_column(heading: "MoClo Restriction Enzyme", checkable: true) { |op| "#{input_volumes["MoClo Restriction Enzyme"]} µl of #{op.input("MoClo Restriction Enzyme").item.id} (#{op.input("MoClo Restriction Enzyme").sample.name})"}
            .end_table
        end
        
        robust_release_inputs ["Ligase", "MoClo Restriction Enzyme"], current_taken_items, interactive: true
    
        all_block_names = []
    	TOTAL_THERMOCYCLERS.times do |tc_number|
    	    BLOCKS_PER_THERMOCYCLER.times do |block_number|
    	        all_block_names << "Thermocycler " + (tc_number+1).to_s + ", Block " + (block_number+1).to_s
    	    end
    	end
        
        data = show {
            title "Select block of thermocycler"
            note "Please select the thermocycler block you would like to use."
            select all_block_names, var: "choice", label: "Block(s) #", default: 0
            }
        block_name = data[:choice]
        
        table_matrix = Array.new {Array.new}
    	table_matrix[0] = ["Zone in #{block_name}", "MoClo Reaction Product Item IDs" ]
    	table_matrix[1] = ["Zone 1", []]
    	table_matrix[2] = ["Zone 2", []]
    	operations.running.each_with_index do |op, i|
    	    if i < 16
    	        table_matrix[1][1] << op.output("MoClo Reaction Product").item.id.to_s
    	        op.output("MoClo Reaction Product").item.move (block_name + ", Zone 1")
    	    else
    	        table_matrix[2][1] << op.output("MoClo Reaction Product").item.id.to_s
    	        op.output("MoClo Reaction Product").item.move (block_name + ", Zone 2")
    	    end
    	end
        table_matrix[1][1] = table_matrix[1][1].join(", ")
        table_matrix[2][1] = table_matrix[2][1].join(", ")
        
        show do
            title "Place MoClo reactions into #{block_name}"
            note "Place MoClo reactions into #{block_name} according to the following table:"
            table table_matrix
        end

        show do
            title "Set up PCR cycle for #{block_name}"
            bullet "Select the circular \"Set Up Run\" button corresponding to #{block_name}"
            bullet "Select \"Open Method\", then \"MOCLO STANDARD\" (located in DAMP 1 folder)"
            bullet "Select \"Verify Block\", and \"Start Run\""
        end
    end
    
    store_outputs_with_volumes output_volumes, current_taken_items, interactive: true
    return {}
    
  end

end
