config:
  title: Order Primer
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
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object_types:
  - {name: Lyophilized Primer, description: White powder, usually not visible, handler: sample_container, data: { "opentrons_labware": "24-well-1.5ml-rack" }, unit: tube, release_method: return, sample_type_name: Primer}
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operation_type: Order Primer
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Primer, sample_types: [Primer], object_types: [Lyophilized Primer], routing: P}
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documentation:
This is a precursor to <b>Rehydrate Primer</b>. This operation will submit an order to IDT for a primer (~25 nmol for short primers, more for long primers due to minimum IDT order amounts).

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    
  props = op.output("Primer").sample.properties
  seq = props["Overhang Sequence"] + props["Anneal Sequence"]
  n = seq.length
  
  if n <= 60
    c = n * Parameter.get_float('short primer cost')
  elsif n <= 90
    c = n * Parameter.get_float('medium primer cost')
  else
    c = n * Parameter.get_float('long primer cost')
  end
  
  l = 15.27 * Parameter.get_float('labor rate (min)')
  { labor:0, materials: c+l }
  
end

protocol:
needs "Standard Libs/Ordering Lib"

class Protocol
  include Ordering
  require 'date'

  def main

    operations.retrieve.make
    
    show do
      title "Prepare to order primer"
      
      check "Go to the <a href='https://www.idtdna.com' target='_blank'>IDT website</a>, log in with the lab account. (Username: lortiz15, password is densmore2016)."
      warning "Ensure that you are logged in to this exact username and password!"
    end

    # make primer table
    tab = operations.map do |op|
      primer = op.output("Primer").sample
      ["Item ID: " + op.output("Primer").item.id.to_s + " " + primer.name, primer.properties["Overhang Sequence"] + primer.properties["Anneal Sequence"]]
    end
    
    # make lists of primers of different lengths
    operations.each { |op| op.temporary[:length] = (op.output("Primer").sample.properties["Overhang Sequence"] + op.output("Primer").sample.properties["Anneal Sequence"]).length }
    
    primers_over_60 = operations.select do |op| 
      length = op.temporary[:length]
      length > 60 && length <= 90
    end.map do |op|
        op.output("Primer").item
    end.to_sentence
    
    primers_over_90 = operations.select do |op| 
      length = op.temporary[:length]
      length > 90
    end.map do |op| 
        op.output("Primer").item
    end.to_sentence
    
    # show primer table
    show do
      title "Create an IDT DNA oligos order"
      check "Go to the <a href='https://www.idtdna.com/site/order/oligoentry'>oligo entry page</a>, click Bulk Input. Copy paste the following table and then click the Update button."
      
      table tab
      check "Scale for primer(s) #{primers_over_60} will have to be set to \"100 nmole DNA oligo.\"" if primers_over_60 != ""
      check "Scale amount for primer(s) #{primers_over_90} will have to be set to \"4 nmole Ultramer DNA Oligo.\"" if primers_over_90 != ""
    end
      
    data = show do
      title "Add to Order"
      
      check "Click Add to Order, review the shopping cart to double check that you entered correctly. There should be #{operations.length} primers in the cart."
      check "Select quote number 123830 and click apply."
      check "Click Checkout, then click Continue."
      
      get "number", var: "price", label: "Enter the total cost ($)", default: operations.running.count*4
      
      check "Enter the payment information: click on the oligo card tab, select the 816584606967 in Choose Payment and then click Submit Order."
      check "Click on Return Home, go to your <a href='https://www.idtdna.com/site/orderstatus/orderstatus'>order history</a> to find the Order Nbr (you may have to refresh the page a few times and wait 5-10 minutes before the order shows up)."
      
      warning "Do not forget to insert the order number before moving foward."
      
      get "text", var: "order_number", label: "Enter the IDT order number", default: 100
    end


    operations.each { |op| op.set_output_data("Primer", :order_number, data[:order_number]) }
    
    place_DNA_order ["IDT", data[:order_number], operations.running.count, data[:price].round(2), Date.today.strftime('%m/%d/%Y'), "Aquarium", "DLN"]
    
    return {}
    
  end

end
