config:
  title: Purify DNA from Reaction
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Digested DNA, description: Temporary samples containing a digested piece of double stranded DNA.}
    - {name: Input DNA, ftype: sample, required: true, sample_types: [Plasmid, Fragment]}
    - {name: Restriction Enzyme 1, ftype: sample, choices: EcoRI, SpeI, XbaI, SacI, required: true, sample_types: [Enzyme]}
    - {name: Restriction Enzyme 2, ftype: sample, required: true, sample_types: [Enzyme]}
    - {name: Length, ftype: number, required: true}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: PCR Result, description: PCR results that contain the fragment we aim to amplify out., handler: sample_container, data: { "max_vol": 100, "short_description":"PCR tube"}, unit: Fragment, release_method: query, release_description: Dispose if there is less than 5 ?L., prefix: M20SRX, sample_type_name: Fragment}
  - {name: Restriction Digest Product, description: The impure product of a restriction digest. Should be cleaned up immediately., handler: sample_container, data: {"max_vol": 2000.0, "short_description":"1.5 mL tube"}, unit: Digested DNA, release_method: dispose, prefix: M20SRX, sample_type_name: Fragment}
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Digested DNA Stock, description: A fragment of dsDNA that has already been digested with enzymes and has phosphorylated ends. Typically has sticky ends., handler: sample_container, data: { "min_conc": 0.0000000010, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20SOP, sample_type_name: Digested DNA}
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operation_type: Purify DNA from Reaction
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Impure Reaction, sample_types: [Fragment, Digested DNA], object_types: [PCR Result, Restriction Digest Product], routing: F}
  - {ftype: sample, role: output, name: Purified DNA, sample_types: [Fragment, Digested DNA], object_types: [Fragment Stock, Digested DNA Stock], routing: F}
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documentation:
This is run after <b>PCR or Restriction Digest</b> and creates a linear dsDNA or digested DNA stock. The technician will purify all large pieces of DNA from a reaction using a spin column. This is a faster/cheaper alternative to Run On Agarose Gel -> Extract Fragment -> Purify Gel Slice.<br><br>

------<b>Output Volume(s)</b>------<br>
Fragment -> 17 µl

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 13.41 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: 2.66+l }
end

protocol:
# Purify Gel Protocol
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/Cloning"

#Designed for QIAquick PCR purification kit

class Protocol
  include Debug
  include Cloning
  
  def main
    current_taken_items = []
    
    pcr_input_ops = operations.running.select{|op| op.input("Impure Reaction").object_type.name.include?("PCR")}
    input_volumes = {"DpnI" => (pcr_input_ops.count / operations.running.count.to_f).round(2) }
    output_volumes = {"Purified DNA" => 17}
    assign_input_items ["DpnI"], input_volumes, current_taken_items
    return {} if check_for_errors
    
    operations.each do |op|
        op.input("Impure Reaction").item.associate :volume, 50.0
    end if debug
    
    operations.add_static_inputs "DpnI", "DpnI", "Enzyme Stock"
    
    operations.sort_by! {|op| op.input("Impure Reaction").item.id}
    
    if pcr_input_ops.any?
        robust_take_inputs ["Impure Reaction", "DpnI"], current_taken_items, interactive: true
    
        show do
            title "Add DpnI to PCR input items"
            note "Add DpnI to PCR input items according to the following table:"
            warning "Do NOT re-digest the PCR reaction product if it's already digested previously."
            table pcr_input_ops.start_table
            .input_item("Impure Reaction")
            .custom_column(heading: "DpnI to add") {|op| {content: "1 µl of #{op.input("DpnI").item}", check: true} }
            .end_table
        end
    
        pcr_input_ops.running.each do |op|
            op.input("Impure Reaction").item.move("37C incubator")
            op.input("Impure Reaction").item.save
        end
    
        robust_release_inputs ["Impure Reaction", "DpnI"], current_taken_items, interactive: true
    
        show do
            check "Wait 30 minutes before continuing"
            timer initial: { hours: 0, minutes: 30, seconds: 0}
        end
    end
    
    robust_take_inputs ["Impure Reaction"], current_taken_items, interactive: true
    
    robust_make ["Purified DNA"], current_taken_items
    
    table_matrix = Array.new(operations.count + 1) {Array.new(2)}
    table_matrix[0] = ["New 1.5 ml tube number", "Reaction item to add", "PX buffer to add"]
    operations.each_with_index do |op, op_index|
        table_matrix[op_index+1] = [(op_index+1).to_s, {content:"#{op.input("Impure Reaction").item.get(:volume)} µl of #{op.input("Impure Reaction").item.id}", check: true}, {content:"#{op.input("Impure Reaction").item.get(:volume) * 5} µl of PB buffer", check: true}]
    end
    
    show do
      title "Transfer to 1.5 mL tubes and add PB buffer"
      note "This protocol uses the QIAquick PCR Purification Kit."
      check "Get out #{operations.count} new 1.5 ml tubes and label them from 1 to #{operations.count}"
      check "Add inputs and PB buffer to new 1.5 ml tubes according to the following table:"
      table table_matrix
    end
        
    operations.each do |op|
      op.input("Impure Reaction").item.mark_as_deleted
      op.input("Impure Reaction").item.save
    end
    
    robust_release_inputs ["Impure Reaction"], current_taken_items, interactive: false
    
    show do
      title "Transfer to spin columns"
      check "Get out #{operations.count} spin columns and round bottom collection tubes. Place spin columns into collection tubes."
      check "Label both the spin columns with the numbers 1-#{operations.count}"
      check "Transfer contents of 1.5 ml tubes (500 µl) to spin columns with corresponding numbers."
      check "Discard the empty 1.5 ml tubes."
    end
    
    show do
      title "Centrifuge"
      centrifuge operations.running.count, 13000, 1
      check "Empty collection tubes by pouring waste liquid into miniprep waste container."
    end
    
    show do
      title "Add PE Buffer"
      check "Add 750 µl PE buffer to columns."
      check "Spin at 13000rpm for 60 seconds."
      check "Discard flow through into miniprep waste container."
      check "Spin at 13000rpm for 3 minutes to remove residual WS buffer from columns."
    end
    
    table_matrix = Array.new(operations.count + 1) {Array.new(2) {"Error"}}
    table_matrix[0] = ["Item ID to write on 1.5 mL tube", "Spin column number"]
    operations.each_with_index do |op, op_index|
        table_matrix[op_index + 1][0] = op.output("Purified DNA").item.id
        table_matrix[op_index + 1][1] = (op_index + 1).to_s
    end
    
    show do
        title "Transfer columns to fresh tubes"
        check "Get out #{operations.count} new 1.5 mL tubes."
        check "Label new tubes with the following item IDs, and transfer columns to these new tubes according to the following table:"
        table table_matrix
        check "Discard round bottom collection tubes."
    end
    
    show do
        title "Elute with water"
        check "Carefully pipette 20 µl of water onto the center of each column. Do not touch the column membrane with the pipette tip."
        check "Let the columns sit for 2 minutes on the bench."
        centrifuge operations.running.count, 13000, 1
        check "KEEP 1.5 ml tubes containing flowthrough!"
    end
    
    store_outputs_with_volumes output_volumes, current_taken_items, interactive: true
    check_for_errors
    
    log_info "op id", operations[0].operation_type.id
    
    return {}
    
  end
  
end
