config:
  title: Restriction Digest
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
  - {name: Digested DNA, description: Temporary samples containing a digested piece of double stranded DNA.}
    - {name: Input DNA, ftype: sample, required: true, sample_types: [Plasmid, Fragment]}
    - {name: Restriction Enzyme 1, ftype: sample, choices: EcoRI, SpeI, XbaI, SacI, required: true, sample_types: [Enzyme]}
    - {name: Restriction Enzyme 2, ftype: sample, required: true, sample_types: [Enzyme]}
    - {name: Length, ftype: number, required: true}
  - {name: Enzyme, description: Enzymes in 1.5 mL tubes stored at -20C}
    - {name: Vendor, ftype: string}
    - {name: Vendor #, ftype: string}
    - {name: Lot #, ftype: string}
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object_types:
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Restriction Digest Product, description: The impure product of a restriction digest. Should be cleaned up immediately., handler: sample_container, data: {"max_vol": 2000.0, "short_description":"1.5 mL tube"}, unit: Digested DNA, release_method: dispose, prefix: M20SRX, sample_type_name: Fragment}
  - {name: Enzyme Stock, description: Enzyme stocks in their original containers from the vendor., handler: sample_container, data: {"max_vol": 1500, "short_description":"1.5 mL tube", "custom_wizards":{"M20SR":1, "M20EB":9999}, "opentrons_labware": "24-well-1.5ml-rack"}, unit: 1 uL, release_method: query, release_description: Dispose only if empty, otherwise return., prefix: M20EB, sample_type_name: Enzyme}
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operation_type: Restriction Digest
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Input DNA, sample_types: [Plasmid, Fragment], object_types: [Plasmid Stock, Fragment Stock], routing: P}
  - {ftype: sample, role: output, name: Restriction Digest Product, sample_types: [Digested DNA], object_types: [Restriction Digest Product], routing: F}
  - {ftype: sample, role: input, name: Restriction Enzyme 1, sample_types: [Enzyme], object_types: [Enzyme Stock], routing: X}
  - {ftype: sample, role: input, name: Restriction Enzyme 2, sample_types: [Enzyme], object_types: [Enzyme Stock], routing: Y}
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documentation:
This is run using a fragment or plasmid stock as input and is a precursor to <b>Run On Agarose Gel or Purify DNA from Reaction</b>. The technician will perform a restriction digest on the input DNA using the specified enzyme. The product must be cleaned up before use in downstream applications.<br><br>

------<b>Input Volume(s)</b>------<br>
Input DNA -> 19 µl

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 15.32 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: 5.68+l }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug Lib"

class Protocol
    
  include Debug
  include Cloning
  REACTION_VOLUME = 50.0
  
  def main
    current_taken_items = []
    # Remember to add volume information to input and output object types (and concentration data where applicable).
    input_volumes = {"Input DNA" => (0.38*REACTION_VOLUME).round(2), "Restriction Enzyme 1" => (0.03*REACTION_VOLUME).round(2), "Restriction Enzyme 2" => (0.03*REACTION_VOLUME).round(2), "Buffer" => (REACTION_VOLUME / 10.0).round(2)}
    output_volumes = {"Restriction Digest Product" => (REACTION_VOLUME*0.95 - 2.0).round}
    
    show do
        title "Keep all items on ice"
        warning "Note: All items used in this protocol should be kept on ice (or thawed at room temperature then immediately transfered to ice)."
    end
    
    operations.add_static_inputs "Buffer", "Cut Smart", "Enzyme Buffer Stock"
    check_user_inputs ["Input DNA"], input_volumes, current_taken_items
    assign_input_items ["Restriction Enzyme 1", "Restriction Enzyme 2", "Buffer"], input_volumes, current_taken_items
    return {} if check_for_errors
    operations.sort_by! {|op| op.input("Input DNA").item.id}
    
    operations.each do |op|
        water_to_add = (REACTION_VOLUME - input_volumes["Input DNA"] - input_volumes["Restriction Enzyme 1"] - input_volumes["Restriction Enzyme 2"] - input_volumes["Buffer"]).round(2)
        if water_to_add > 0.000001
            op.temporary[:water_to_add] = water_to_add
        else
            op.error :volume_error, "Water to add evaluated to negative value, possibly due to too many inputs."
        end
    end
    
    robust_make ["Restriction Digest Product"], current_taken_items
    
    robust_take_inputs ["Input DNA", "Buffer"], current_taken_items, interactive: true
    
    show do
        title "Add reagents to reaction tubes"
        note "Get out #{operations.running.count} new 1.5 ml tubes. Label and add reagents to tubes according to the following table."
        table operations.start_table
        .output_item("Restriction Digest Product")
        .custom_column(heading: "Buffer to add", checkable: true) { |op| "#{input_volumes["Buffer"]} µl of #{op.input("Buffer").item.id} (#{op.input("Buffer").sample.name})"}
        .custom_column(heading: "Water to add", checkable: true) { |op| "#{op.temporary[:water_to_add]} µl of water"}
        .custom_column(heading: "Input DNA", checkable: true) { |op| "#{input_volumes["Input DNA"]} µl of #{op.input("Input DNA").item.id}"}
        .end_table
    end
    
    robust_release_inputs ["Input DNA", "Buffer"], current_taken_items, interactive: true
    
    robust_take_inputs ["Restriction Enzyme 1", "Restriction Enzyme 2"], current_taken_items, interactive: true
    
    show do
        title "Add restriction enzymes to reaction tubes"
        note "Add restriction enzymes to reaction tubes according to the following table"
        table operations.start_table
        .output_item("Restriction Digest Product")
        .custom_column(heading: "Restriction Enzyme 1", checkable: true) { |op| "#{input_volumes["Restriction Enzyme 1"]} µl of #{op.input("Restriction Enzyme 1").item.id} (#{op.input("Restriction Enzyme 1").sample.name})"}
        .custom_column(heading: "Restriction Enzyme 2", checkable: true) { |op| "#{input_volumes["Restriction Enzyme 2"]} µl of #{op.input("Restriction Enzyme 2").item.id} (#{op.input("Restriction Enzyme 2").sample.name})"}
        .end_table
    end
    
    robust_release_inputs ["Restriction Enzyme 1", "Restriction Enzyme 2"], current_taken_items, interactive: true
    
    show do
      title "Centrifuge reactions"
      check "Briefly spin down reactions in the microcentrifuge by holding the \">>\" button for 3 seconds to collect liquid at the bottom of tubes"
      warning "Make sure to balance the centrifuge!"
    end
    
    # Display table to tech
    show do
        title "Incubate reactions in 37C incubator"
        note "Incubate reactions in 37C incubator"
        timer initial: { hours: 1, minutes: 0, seconds: 0}
        warning "After incubation, the products should be cleaned up immediately. Do not store more than 20 minutes."
    end
    
    store_outputs_with_volumes output_volumes, current_taken_items, interactive: true
    return {}
  end
end
