config:
  title: Sample Drop Off
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E. coli strain, Fragment]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer]}
    - {name: Raw Sequence, ftype: string}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
  - {name: E. coli strain, description: A strain of E. coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E. coli strain]}
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object_types:
  - {name: Fragment Stock, description: Fragment stock in 1.5 mL tube, usually stored in M20 fridge., handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Fragment, release_method: return, prefix: M20P, sample_type_name: Fragment}
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
  - {name: Primer Stock, description: Rehydrated primer in tube from IDT - 100uM, handler: sample_container, data: { "min_conc": 0.000010, "rec_conc": 0.000025, "max_vol": 1500, "conc_callback": "manually_enter_uM_conc", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Base, release_method: return, prefix: M20O, sample_type_name: Primer}
  - {name: Lyophilized Primer, description: White powder, usually not visible, handler: sample_container, data: { "opentrons_labware": "24-well-1.5ml-rack" }, unit: tube, release_method: return, sample_type_name: Primer}
  - {name: Checked E coli Plate of Plasmid, description: It's a checked plate, handler: sample_container, unit: plate, release_method: return, prefix: M4AP, sample_type_name: Plasmid}
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operation_type: Sample Drop Off
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Sample being dropped off, sample_types: [Fragment, Plasmid, Primer, Primer, Plasmid], object_types: [Fragment Stock, Plasmid Stock, Primer Stock, Lyophilized Primer, Checked E coli Plate of Plasmid], array: true, routing: P}
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documentation:
The user drops off items to the DAMP Lab North (Room 423, 610 Commonwealth Ave. Boston, MA 02215). After submitting a plan which includes this operation, the user may come in at any time during business hours to drop off their items.<br><br>

<b>------Drop off instructions------</b><br>
-<b>Primer Stock:</b> Original vendor tube (or a 1.5 ml tube) at concentration of 25 µM or higher with Sample ID and the Concentration in µM written on top. 10 µl minimum volume.<br>
-<b>Lyophilized Primer:</b> Original vendor tube with Sample ID written on top.<br>
-<b>Plasmid Stock:</b> 1.5 ml tube at a concentration of 25 nM or higher (~85 ng/ul for a 5 kb plasmid) with Sample ID written on top. 10 µl minimum volume.<br>
-<b>Fragment Stock:</b> 1.5 ml tube at a concentration of 25 nM or higher (~17 ng/ul for a 1 kb fragment) with Sample ID written on top. 10 µl minimum volume.<br>
-<b>Lyophilized Fragment:</b> Original vendor tube with Sample ID written on top.<br>
<br>
Please email damplabnorthaquarium@gmail.com for questions or more information.

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cost_model:
# Not up-to-date (4/17/20)

def cost(_op)
  { labor: 0, materials: 0 }
end

protocol:
needs "Cloning Libs/Cloning"
needs "Standard Libs/Debug Lib"

class Protocol
  include Cloning
  include Debug
  
  def main
    
    current_taken_items = []
    robust_make ["Sample being dropped off"], current_taken_items
    
    table_matrix = Array.new (operations.running.count + 1) {Array.new}
    table_matrix[0] = ["New label (item ID)", "Label on user-supplied item (erase this)"]
    operations.running.map{|op| op.output_array("Sample being dropped off").items}.flatten.each_with_index{ |item, index| table_matrix[index+1] = [item.id.to_s, {content: ("#{item.sample.id.to_s} (#{item.sample.name})"), check: true}]}
    
    #Manually entering primer stock concentrations supplied by user (because these are written on tops of tubes and will be destroyed by relabelling)
    primer_stocks = operations.select{|op| op.output_array("Sample being dropped off")[0].object_type.name == "Primer Stock"}.map{|op| op.output_array("Sample being dropped off").items}.flatten
    
    conc_data = show do
      title "Please determine and enter concentrations of the following items in µM."
      note "Please determine and enter concentrations of the following items in µM."
      warning "Do not enter concentration in ng/ul or any unit other than µM."
      primer_stocks.each do |i|
        get "number", var: "c#{i.id}", label: "#{i.sample.id.to_s} (#{i.sample.name})", default:  (debug ? Random.rand*100 : 0)
      end
    end if primer_stocks.any?
    
    primer_stocks.each do |item|
        item.associate(:concentration, conc_data["c#{item.id}".to_sym] / 1000000.0)
        item.save
    end if primer_stocks.any?
    
    show do
        title "Relabel items from user"
        check "Users supply samples labelled with sample IDs and/or sample names instead of item IDs. You must relabel these items before adding them to the inventory (transfer to new containers if necessary)."
        table table_matrix
    end
    
    characterize current_taken_items, current_taken_items
    
    robust_release current_taken_items, current_taken_items, interactive: true
    
    return {}
    
  end
  
end
