config:
  title: Upload Sequencing Results
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
sample_types:
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker 1, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS, TRP, URA, LEU, NatMX, KanMX, HygMX, BleoMX ,5FOA, N/A, Other}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: Alias, ftype: string, choices: Promoter, CDS, Terminator, Backbone, RBS, Marker, Insulator, Reporter Plasmid, Gate, Circuit w/ Reporter Plasmid, Other, N/A}
    - {name: Bacterial Marker 2, ftype: string, choices: Amp, Cam, Carb, Kan, Spec, Strep, Other, N/A, required: true}
  - {name: Primer, description: The primer stock solutions are diluted to 25 uM. Primer melting temperatures should be calculated using the **NEB Tm calculator http://tmcalculator.neb.com/#!/main configured for Phusion High-Fidelity DNA Polymerase (HF Buffer)** for standard PCR reaction}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
    - {name: URL, ftype: url}
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object_types:
  - {name: Plasmid Stock, description: A plasmid stock that has yet to be sequenced verified, handler: sample_container, data: { "min_conc": 0.000000005, "rec_conc": 0.000000025, "max_vol": 1500, "conc_callback": "nanodrop_dsdna", "short_description":"1.5 mL tube", "opentrons_labware": "24-well-1.5ml-rack"}, unit: Plasmid, release_method: return, prefix: M20P, sample_type_name: Plasmid}
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operation_type: Upload Sequencing Results
category: Cloning
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Plasmid, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
  - {ftype: sample, role: output, name: Plasmid, sample_types: [Plasmid], object_types: [Plasmid Stock], routing: P}
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documentation:
This is run after <b>Send to Sequencing</b> and is a precursor to <b>Confirm Sequencing Results</b>. Sequencing results will be associated with plasmid stock items, and the user will be notified by email that results have arrived.<br><br>

<b>Important notes on user confirmation of sequencing results:</b><br>
    -"Send to Sequencing" should always be followed by "Upload Sequencing Results"<br>
    -If "Confirm Sequencing Results" is added after "Upload Sequencing Results", anything downstream of "Confirm Sequencing Results" will wait for the user to confirm or reject the sequencing results before continuing.<br>
    -When sequencing results arrive, you will receive an email with instructions on how to view and confirm/reject your results.<br>

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cost_model:
# All related numbers come from 'Damp Lab Services_Dec2019'
# materials are calculated on 'Damp Lab Services_Dec2019'
# l stands for labor

def cost(op)
    l = 24.88 * Parameter.get_float('labor rate (min)')
    {labor: 0, materials: l }
end

protocol:
needs "Standard Libs/Debug Lib"
needs "Cloning Libs/Cloning"

class Protocol
  include Debug
  include Cloning
  ORDER = "Plasmid"

  def main

    # debuggin'
    if debug
      operations.first.set_input_data ORDER, :tracking_num, 12345
    end
    
    operations.retrieve interactive: false

    tracking_num = operations.first.input_data(ORDER, :tracking_num)
    
    results_info = show do
      title "Check if Sequencing results arrived?"
      
      check "Go to the <a href='http://www.quintarabio.com/' target='_blank'>QUINTARA website</a>, log in with lab account (Username: damplab@bu.edu, Password: cidar01)."
      check "In 'Sanger Sequencing' tab, find the Reference ID #{tracking_num}, and check if the sequencing results have shown up yet."
      
      select ["Yes", "No"], var: "results_back_or_not", label: "Do the sequencing results show up?"
    end

    raise "The sequencing results have not shown up yet." if results_info[:results_back_or_not] == "No"

    show do
      title "Download Quintara Sequencing Results zip file"
      check "Click the tab 'ab1', which should download a zip file named #{tracking_num}.zip."
      check "Save the zip file in 'Sequencing Results' folder, on Desktop."
      #check "Upload the #{tracking_num}_ab1.zip file here."
      #check "Wait until the download is complete."
    end
    
    sequencing_uploads = show do
      title "Upload individual sequencing results"
      check "Unzip the downloaded zip file named #{tracking_num}_ab1.zip."
      check "If you are on a Windows machine, open the #{tracking_num}.zip file, then click Extract."
      check "Upload all the unzipped ab1 files by navigating to the upzipped folder."
      check "You can use Shift command to select all files."
      check "Wait until all the uploads finished (a number appears at the end of file name). "
      
      upload var: "sequencing_results"
    end

    operations.each do |op|
      op.pass("Plasmid","Plasmid")
      # find sequencing result for op
      upload_results = sequencing_uploads[:sequencing_results] || []
      sequencing_upload_id = upload_results.find { |result| result[:name].include? op.input(ORDER).item.id.to_s }
      if sequencing_upload_id
        upload = Upload.find(sequencing_upload_id[:id])
        op.output("Plasmid").item.associate (:sequencing_results, "Please click \"Seq OK\" or discard the item after reviewing sequencing data.", upload)
      end
      
      #pass through plasmid 
    end
    
    ops_by_user = {}
    operations.each do |op|
        user = User.find(op.user_id)
        if ops_by_user.keys.include? user
            ops_by_user[user] << op
        else
            ops_by_user[user] = [op]
        end
    end
    
    ops_by_user.each do |user, ops|
        body = "
        Hello #{user.name},<br/><br/>
        DAMP Lab North has received sequencing results for the following items. Please follow the links provided to view your items in the inventory. To accept sequencing results and continue with downstream operations, click the green \"Seq OK\" button when viewing an item in your inventory. If a sequence is incorrect, discard the item. For questions or additional information, email #{Parameter.get_string('smtp_email_address')}.<br/><br/>
        #{
            ops.map { |op|
                "<b>Item:</b> #{op.input("Plasmid").item.id.to_s} <b>Sample:</b> #{op.input("Plasmid").sample.name} <b>Plan:</b> #{op.plan.id}. <a href=\"http://54.190.2.203/browser?sid=#{op.input("Plasmid").sample.id.to_s}\">View in inventory</a>"}.join("<br/>")
        }"
        if user.parameters.find { |p| p.key == 'email'}
            send_email user.name, user.parameters.find { |p| p.key == 'email'}.value, "DAMP Lab Seqeuncing Results", body
        end
    end

    return {}
    
  end

end
