config:
  title: Edit Collection
  description: No description given
  copyright: No copyright declared
  version: no version info
  maintainer: {name: No maintainer, email: noone@nowehere}
  github: {repo: none, user: none, access_token: none}
  aquadoc_version: 1.0.0
operation_type: Edit Collection
category: Manager
deployed: false
on_the_fly: false
field_types:
  - {ftype: number, role: input, name: Item ID}
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protocol:
class Protocol
  def main
    operations.retrieve
    operations.each do |op|
        item_id = op.input("Item ID").val.to_i
        col = Collection.find item_id
        take [col]
        
        # remove samples
        subt = show do 
            title "how many samples to remove from #{col.id}"
            
            get "number", var: "subt", label: "how many to remove", default: 0
            get "number", var: "sample", label: "Sample ID to remove", default: 0
        end
        if !subt[:subt].nil? && !subt[:sample].nil?
            sample = Sample.find subt[:sample]
            subt[:subt].times do 
                col.remove_one sample
            end
        end
        
        # add samples
        add = show do 
            title "how many samples to add to #{col.id}"
            
            get "number", var: "add", label: "how many to add", default: 0
            get "number", var: "sample", label: "Sample ID to add", default: 0
        end        
        if !add[:add].nil? && !add[:sample].nil?
            sample = Sample.find add[:sample]
            add[:add].times do
                col.add_one sample
            end
        end
         
        release [col]
    end
    return {}
  end
end
